# 1 "/opt/topspin/exp/stan/nmr/lists/pp/jresgpprqf"
;jresgpprqf
;avance-version (07/04/04)
;homonuclear J-resolved 2D correlation
;with presaturation during relaxation delay
;using gradients
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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

"p2=p1*2"
"d11=30m"
"d12=20u"


"in0=inf1/2"

"d0=3u"


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define delay MCWRK
define delay MCREST
"MCWRK = 0.500000*d11"
"MCREST = d11 - d11"
    dccorr
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1 ze
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2 MCWRK 
LBLF1, MCWRK
  MCREST
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3 d12 pl9:f1
  d1 cw:f1 ph29
  4u do:f1
  d12 pl1:f1
  50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
  p1 ph1
  4u
  d0
  p16:gp1
  d16
  p2 ph2
  4u
  p16:gp2
  d16
  d0 setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
  go=2 ph31
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  MCWRK  wr #0 if #0 zd id0 
  lo to LBLF1 times td1
  MCWRK
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exit


ph1=0 0 0 0 1 1 1 1 2 2 2 2 3 3 3 3
ph2=0 2 1 3 1 3 2 0 1 3 2 0 2 0 3 1
ph29=0
ph31=0 0 2 2 1 1 3 3


;pl1 : f1 channel - power level for pulse (default)
;pl9 : f1 channel - power level for presaturation
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel -  180 degree high power pulse
;p16: homospoil/gradient pulse                       [1 msec]
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30msec]
;d12: delay for power switching                      [20 usec]
;d16: delay for homospoil/gradient recovery
;inf1: 1/w, w = max. width of multiplet
;in0: 1/(2 * w), w = max. width of multiplet
;nd0: 2
;NS: 4 * n
;DS: 16
;td1: number of experiments
;FnMODE: QF


;use gradient ratio:    gp 1 : gp 2
;                         10 :   10

;for z-only gradients:
;gpz1: 10%
;gpz2: 10%

;use gradient files:
;gpnam1: SINE.100
;gpnam2: SINE.100


;$Id: jresgpprqf,v 1.2 2007/04/11 13:34:30 ber Exp $
